import ij.*; 
import ij.process.*; 
import ij.gui.*; 
import java.awt.*; 
import ij.plugin.*; 
import ij.plugin.frame.*; 
import ij.io.FileSaver; 
import org.micromanager.utils.ImageUtils; 
import ij.process.ImageProcessor; 
import ij.ImagePlus; 
import java.awt.*; 
import java.awt.event.*; 
import javax.swing.*; 
import ij.io.DirectoryChooser; 
gui.refreshGUI(); 
gui.refreshGUIFromCache(); 
gui.closeAllAcquisitions(); 
gui.clearMessageWindow(); 


DirectoryChooser dr = new DirectoryChooser("Choose the directory"); 
dr.setDefaultDirectory("D:\temp"); 
acqDir = dr.getDirectory(); 

print("image:"+ acqDir);	//print acquisition directory 
//Specify list of EMGains
int[] GainList = { 6, 3, 2, 4, 1, 5}; // Gain List 
nG = GainList.length; 

//Specify list of Exposures for each EMGain
int[] ExpList = { 2000, 1500, 1000, 800, 600, 400, 200, 100, 50 }; 
nE = ExpList.length;

nCh = 1; // # of cameras 
nZ = nPos = 0; // # of Z and xy positions 
z = pos = 0; 

for( g = 0; g < nG; g++ ){	// loop for varying Gain 
	deviceName = "Evolve1"; // camera name 
  propertyName = "MultiplierGain"; // property to be changed 
  newValue = String.valueOf(GainList[g]); // load an EMGain from the list of EMGains 
  mmc.setProperty(deviceName, propertyName, newValue);// Set the above mentioned properties 

  acqName = gui.getUniqueAcquisitionName("EMGain "+ GainList[g]); //set folder name 

  gui.openAcquisition(acqName, acqDir, nE, nCh, nZ, true, true);	
                        
    for( e = 0; e < nE; e++ ){	// loop for varying exposures 
        mmc.sleep(50); //Interval between images
                        
        mmc.setExposure(ExpList[e]); //set exposure from exposure list 
     	  gui.refreshGUI(); 
        mmc.snapImage(); //using this function activates the shutter as well as opposed to startacquisition function
        for (int ch = 0; ch < nCh; ch++){ // loop for multicam image 
            im = mmc.getTaggedImage(ch); 
   	        gui.addImageToAcquisition(acqName, e, ch, z, pos, im); 
            } 
    } 
  }
